root = "/Users/julian/Documents/General Science/Programming/py/general_analysis/20260610_duolink-PLA/data/2026-05-26 RNAscope after PLA"
list = getFileList(root);
list = Array.sort(list);
run("Close All");
run("Fill ROI holes");
for (i = 23; i < list.length; i++) {
    sample_name = list[i];
    // Print index in case, to continue in case of error
    print(i);
    print(substring(sample_name, 0, 8));
    input = root + File.separator + sample_name;
    open(input + File.separator + "images" + File.separator + "granule.tif");
    run("Gaussian Blur...", "sigma=3");
    open(input + File.separator + "images" + File.separator + "pla.tif");
	// open the third image: vasa.tif if it exists, otherwise actin.tif
	vasaPath  = input + File.separator + "images" + File.separator + "vasa.tif";
	actinPath = input + File.separator + "images" + File.separator + "actin.tif";
	
	if (File.exists(vasaPath)) {
	    open(vasaPath);
	} else if (File.exists(actinPath)) {
	    open(actinPath);
	} else {
	    print("WARNING: neither vasa.tif nor actin.tif found in " + sample_name);
	}
    
    getDimensions(width, height, _, _, _);
    // run("Enhance Contrast...", "saturated=1");
//    run("Duplicate...", "title=[Segmentation Helper]");
//    open(input + File.separator + "raw" + File.separator + "granule.tiff");
//    run("Enhance Contrast...", "saturated=5");
//    run("Gaussian Blur...", "sigma=20");
//	run("Find Edges");
//	resetMinAndMax;
//    open(input + File.separator + "raw" + File.separator + "nanos-rna.tif");
//
//     open(input + File.separator + "segmentations" + File.separator + "cell.tif");
//     granule_segID = getImageID();
//     setMinAndMax(0, 1);
//     // Tile windows
//     run("Tile");
//
//     // setTool("wand");
//     selectImage(granule_segID);
//     run("Select None");
//     waitForUser("Select unwanted segmentations");
// 	// Check if there is a selection before clearing
//     if (selectionType() != -1) {
//         run("Clear", "slice");
//     }
//     run("Select None");
//
// //    // Set multipoint tool and wait for user to select best granule
//     // setTool("multipoint");
//     // waitForUser("Select best situated granule");
//
//     // Get the coordinates from the multipoint selection
//     // getSelectionCoordinates(xpoints, ypoints);
//
//     // Save coordinates to text file
//     // if (xpoints.length > 0) {
//         // coordFile = input + File.separator + "granule_coords.txt";
// //        File.close(f);
//         // f = File.open(coordFile);
//
//         // print(f, "X\tY");
//         // for (j = 0; j < xpoints.length; j++) {
//             // print(f, xpoints[j] + "\t" + ypoints[j]);
//         // }
//         // File.close(f);
//         // print(f);
//     // }
//     run("Clear Results");
//
//
//
//
//
//     // selectImage(granule_segID);
//     saveAs("tiff", input + File.separator + "segmentations" + File.separator + "cell.tif");
//     close();
//
//
//
//
//
//     setTool("brush");
//
//     //Load and refine the nucleus segmentation
//     newImage("nucleus", "16-bit black", width, height, 1);
//     nuc_segID = getImageID();
//     run("Tile");
//     waitForUser("Refine nucleus segmentation");
//     roiManager("reset");
//     roiManager("Add");
//     selectImage(nuc_segID);
//     roiManager("Select", 0);
//     if (selectionType() != -1) {
//         run("Set...", "value=1");
//     }
//     selectImage(nuc_segID);
//     saveAs("tiff", input + File.separator + "segmentations" + File.separator + "nucleus.tiff");
//     close();
//
//     //Load and refine the cell segmentation
//
open(input + File.separator + "segmentations" + File.separator + "cell.tif");
	setTool("brush");
//	newImage("cell", "16-bit black", width, height, 1);
    setMinAndMax(0, 1);
    cell_segID = getImageID();
    run("Tile");
    waitForUser("Refine cell segmentation");
    roiManager("reset");
    roiManager("Add");
    selectImage(cell_segID);
    roiManager("Select", 0);
    run("Clear Outside");
    if (selectionType() != -1) {
		run("Set...", "value=1");
    }
    saveAs("tiff", input + File.separator + "segmentations" + File.separator + "cell.tif");
    close();
    

    close("*");
}
setBatchMode(false);
